PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 0.3255, 0.3255, 0.3255
  expName = MM_scan
  keyboardBackend = ioHub
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Routines
  Routine wait
    RoutineSettingsComponent wait
      saveStartStop = False
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    CodeComponent mouse_hide
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)
    KeyboardComponent trigger
      allowedKeys = 'o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wait for 'o' trigger from scanner
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  Routine run_in
    RoutineSettingsComponent run_in
      saveStartStop = False
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    CodeComponent runin_mouse
      Code Type = Py
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)
    PolygonComponent runin_fix
      fillColor = white
      shape = cross
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    TextComponent runin_testing_text
      letterHeight = 30
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = run-in 8s
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  Routine visualcue
    RoutineSettingsComponent visualcue
      saveStartStop = False
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    CodeComponent code_startpump
      Code Type = Py
      Begin Experiment:
        ##import stuff
        #import serial
        #import time

        ##open serial port
        #ser = serial.Serial(port='COM4', baudrate=19200, bytesize=8)

        ##pump order:
        ##0 - water1
        ##1 - water2
        ##2 - chocolate milk
        ##3 - strawberry milk
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)
    ImageComponent visual_cue
      image [set every repeat] = $imgpath
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine postCueWait
    RoutineSettingsComponent postCueWait
      saveStartStop = False
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    CodeComponent postcue_mouse
      Code Type = Py
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      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)
    PolygonComponent postcuewait
      fillColor = white
      shape = cross
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent postcuewait_testing_text
      letterHeight = 30
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = postcue wait 2s
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  Routine taste_delivery
    RoutineSettingsComponent taste_delivery
      saveStartStop = False
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    CodeComponent tastedelivery_code
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        #if eventtype == 'water1': #if water1
        #    ser.write(("0run\r").encode()) #trigger pump 1
        #elif eventtype == 'water2': #if water2
        #    ser.write(("1run\r").encode()) #trigger pump 2
        #elif eventtype == 'milkchoc': #if chocolate
        #    ser.write(("2run\r").encode()) #trigger pump 3
        #elif eventtype == 'milkstraw': #if strawberry
        #    ser.write(("3run\r").encode()) #trigger pump 4
    PolygonComponent taste_delivery_fixation
      fillColor = white
      shape = cross
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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    TextComponent taste_testing_delivery_text
      letterHeight = 40
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text [set every repeat] = $eventtype + " delivery 11s"
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  Routine pre_rinse_wait
    RoutineSettingsComponent pre_rinse_wait
      saveStartStop = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)

        if rinse_deliver == 0: #if no rinse
            continueRoutine = False #skip routine
    PolygonComponent rinsewait
      fillColor = white
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent rinse_testing_wait_text
      durationEstim = 1
      letterHeight = 30
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = pre-rinse wait 1s
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  Routine rinse_delivery
    RoutineSettingsComponent rinse_delivery
      saveStartStop = False
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    CodeComponent rinsedelivery_code
      Code Type = Py
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)

        if rinse_deliver == 0: #if no rinse
            continueRoutine = False #skip routine
        #elif rinse_deliver == 1: #if there's a rinse
        #    ser.write(("1run\r").encode()) #trigger pump 2
    PolygonComponent rinse_delivery_fixation
      fillColor = white
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent rinse_testing_delivery_text
      letterHeight = 40
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = Rinse delivery
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  Routine Jitter
    RoutineSettingsComponent Jitter
      saveStartStop = False
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    CodeComponent jitter_mouse
      Code Type = Py
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)
    PolygonComponent jitter_fix
      fillColor = white
      shape = cross
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    TextComponent jitter_testing_text
      letterHeight = 30
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text [set every repeat] = Jittered ISI
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    KeyboardComponent end_task_trigger
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent end_task
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = You have completed this scan :)
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Flow
  Routine wait
  Routine run_in
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = eventtype.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imgpath': 'images/chocolate.png', 'eventtype': 'milkchoc', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 5},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water1', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 11},
      {'imgpath': 'images/strawberry.png', 'eventtype': 'milkstraw', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 1},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water2', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 5},
      {'imgpath': 'images/chocolate.png', 'eventtype': 'milkchoc', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 8},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water1', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 3},
      {'imgpath': 'images/strawberry.png', 'eventtype': 'milkstraw', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 14},
      {'imgpath': 'images/chocolate.png', 'eventtype': 'milkchoc', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 7},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water2', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 9},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water1', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 9},
      {'imgpath': 'images/strawberry.png', 'eventtype': 'milkstraw', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 9},
      {'imgpath': 'images/tless.jpg', 'eventtype': 'water2', 'rinse_wait': 0, 'rinse_delivery': 0, 'jitter': 7},
      {'imgpath': 'images/chocolate.png', 'eventtype': 'milkchoc', 'rinse_wait': 1, 'rinse_delivery': 2.5, 'jitter': 14}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
    Routine visualcue
    Routine postCueWait
    Routine taste_delivery
    Routine pre_rinse_wait
    Routine rinse_delivery
    Routine Jitter
  LoopTerminator trials
  Routine end
